proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, dend

proc topol() { local i
  connect dend(0), soma(1)
  basic_shape()
}
proc basic_shape() {
  soma {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(15, 0, 0, 1)}
  dend {pt3dclear() pt3dadd(15, 0, 0, 1) pt3dadd(90, 0, 0, 1)}
}

objref all
proc subsets() { local i
  objref all
  all = new SectionList()
    soma all.append()
    dend all.append()

}
proc geom() {
  soma {  L = 20  diam = 20  nseg = 1  }
  dend {  L = 1000  diam = 5  nseg = 1  }
}
proc geom_nseg() {
}
proc biophys() {
  forsec all {
    Ra = 160
    cm = 1
  }
  soma {
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
  }
  dend {
    insert pas
      g_pas = 0.0001
      e_pas = -70
  }
}
access soma

celldef()
